---
API: 2
OpenSesame: 3.0.5
Platform: nt
---
set width 1024
set uniform_coordinates "yes"
set title "New experiment"
set subject_parity "even"
set subject_nr 0
set start "experiment"
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend "legacy"
set round_decimals 2
set mouse_backend "psycho"
set keyboard_backend "psycho"
set height 768
set fullscreen "no"
set form_clicks "no"
set foreground "white"
set font_underline "no"
set font_size 18
set font_italic "no"
set font_family "mono"
set font_bold "no"
set disable_garbage_collection "yes"
set description "The main experiment item"
set coordinates "uniform"
set compensation 0
set color_backend "psycho"
set clock_backend "psycho"
set canvas_backend "psycho"
set bidi "no"
set background "black"

define sketchpad Break
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You're halfway done with this block! Take a quick break,<br />and press the space bar to continue..." x=0 y=0 z_index=0

define sequence Exp_Loop
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run Welcome_1 always
	run Welcome_2 always
	run Welcome_3 always
	run Welcome_4 always
	run Training_loop always
	run LWMC_start always
	run space_bar always
	run LWMC_loop always
	run IS_start always
	run IS_even_df_loop "[subject_parity] = even"
	run IS_odd_bc_loop "[subject_parity] = odd"
	run LWMI_Start always
	run LWMI_loop always
	run Goodbye_1 always

define sketchpad Goodbye_1
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You've completed this experiment!<br />Please let the experimenter know." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to log data and exit the experiment..." x=0 y=288 z_index=0

define sequence IS_even
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run fixation_dot always
	run Stim always
	run counter always
	run Break always
	run log always

define loop IS_even_df_loop
	set source_file ""
	set source "table"
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "IS_even"
	set description "Repeatedly runs another item"
	set cycles 192
	set continuous "no"
	set break_if_on_first "yes"
	set break_if "never"
	setcycle 0 Text "BIRD"
	setcycle 0 Image "bird"
	setcycle 0 Trial "Congruent"
	setcycle 0 Rep "1"
	setcycle 0 Correct "[congruent_key]"
	setcycle 0 Procedure "ISPC"
	setcycle 0 ISPC "MI"
	setcycle 1 Text "BIRD"
	setcycle 1 Image "bird"
	setcycle 1 Trial "Congruent"
	setcycle 1 Rep "2"
	setcycle 1 Correct "[congruent_key]"
	setcycle 1 Procedure "ISPC"
	setcycle 1 ISPC "MI"
	setcycle 2 Text "BIRD"
	setcycle 2 Image "bird"
	setcycle 2 Trial "Congruent"
	setcycle 2 Rep "3"
	setcycle 2 Correct "[congruent_key]"
	setcycle 2 Procedure "ISPC"
	setcycle 2 ISPC "MI"
	setcycle 3 Text "BIRD"
	setcycle 3 Image "bird"
	setcycle 3 Trial "Congruent"
	setcycle 3 Rep "4"
	setcycle 3 Correct "[congruent_key]"
	setcycle 3 Procedure "ISPC"
	setcycle 3 ISPC "MI"
	setcycle 4 Text "BIRD"
	setcycle 4 Image "bird"
	setcycle 4 Trial "Congruent"
	setcycle 4 Rep "5"
	setcycle 4 Correct "[congruent_key]"
	setcycle 4 Procedure "ISPC"
	setcycle 4 ISPC "MI"
	setcycle 5 Text "BIRD"
	setcycle 5 Image "bird"
	setcycle 5 Trial "Congruent"
	setcycle 5 Rep "6"
	setcycle 5 Correct "[congruent_key]"
	setcycle 5 Procedure "ISPC"
	setcycle 5 ISPC "MI"
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	setcycle 12 Text "CAT"
	setcycle 12 Image "cat"
	setcycle 12 Trial "Congruent"
	setcycle 12 Rep "1"
	setcycle 12 Correct "[congruent_key]"
	setcycle 12 Procedure "ISPC"
	setcycle 12 ISPC "MI"
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	setcycle 24 Text "DOG"
	setcycle 24 Image "dog"
	setcycle 24 Trial "Congruent"
	setcycle 24 Rep "1"
	setcycle 24 Correct "[congruent_key]"
	setcycle 24 Procedure "ISPC"
	setcycle 24 ISPC "MC"
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	setcycle 60 Text "FISH"
	setcycle 60 Image "bird"
	setcycle 60 Trial "Incongruent"
	setcycle 60 Rep "1"
	setcycle 60 Correct "[incongruent_key]"
	setcycle 60 Procedure "ISPC"
	setcycle 60 ISPC "MI"
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	setcycle 72 Text "CAT"
	setcycle 72 Image "bird"
	setcycle 72 Trial "Incongruent"
	setcycle 72 Rep "1"
	setcycle 72 Correct "[incongruent_key]"
	setcycle 72 Procedure "ISPC"
	setcycle 72 ISPC "MI"
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	setcycle 84 Text "DOG"
	setcycle 84 Image "bird"
	setcycle 84 Trial "Incongruent"
	setcycle 84 Rep "1"
	setcycle 84 Correct "[incongruent_key]"
	setcycle 84 Procedure "ISPC"
	setcycle 84 ISPC "MI"
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	setcycle 96 Text "FISH"
	setcycle 96 Image "cat"
	setcycle 96 Trial "Incongruent"
	setcycle 96 Rep "1"
	setcycle 96 Correct "[incongruent_key]"
	setcycle 96 Procedure "ISPC"
	setcycle 96 ISPC "MI"
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	setcycle 108 Text "BIRD"
	setcycle 108 Image "cat"
	setcycle 108 Trial "Incongruent"
	setcycle 108 Rep "1"
	setcycle 108 Correct "[incongruent_key]"
	setcycle 108 Procedure "ISPC"
	setcycle 108 ISPC "MI"
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	setcycle 120 Text "DOG"
	setcycle 120 Image "cat"
	setcycle 120 Trial "Incongruent"
	setcycle 120 Rep "1"
	setcycle 120 Correct "[incongruent_key]"
	setcycle 120 Procedure "ISPC"
	setcycle 120 ISPC "MI"
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	setcycle 131 Text "DOG"
	setcycle 131 Image "cat"
	setcycle 131 Trial "Incongruent"
	setcycle 131 Rep "12"
	setcycle 131 Correct "[incongruent_key]"
	setcycle 131 Procedure "ISPC"
	setcycle 131 ISPC "MC"
	setcycle 132 Text "FISH"
	setcycle 132 Image "dog"
	setcycle 132 Trial "Incongruent"
	setcycle 132 Rep "1"
	setcycle 132 Correct "[incongruent_key]"
	setcycle 132 Procedure "ISPC"
	setcycle 132 ISPC "MC"
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	setcycle 136 Text "BIRD"
	setcycle 136 Image "dog"
	setcycle 136 Trial "Incongruent"
	setcycle 136 Rep "1"
	setcycle 136 Correct "[incongruent_key]"
	setcycle 136 Procedure "ISPC"
	setcycle 136 ISPC "MC"
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	setcycle 140 Text "CAT"
	setcycle 140 Image "dog"
	setcycle 140 Trial "Incongruent"
	setcycle 140 Rep "1"
	setcycle 140 Correct "[incongruent_key]"
	setcycle 140 Procedure "ISPC"
	setcycle 140 ISPC "MC"
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	setcycle 144 Text "DOG"
	setcycle 144 Image "fish"
	setcycle 144 Trial "Incongruent"
	setcycle 144 Rep "1"
	setcycle 144 Correct "[incongruent_key]"
	setcycle 144 Procedure "ISPC"
	setcycle 144 ISPC "MC"
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	setcycle 148 Text "BIRD"
	setcycle 148 Image "fish"
	setcycle 148 Trial "Incongruent"
	setcycle 148 Rep "1"
	setcycle 148 Correct "[incongruent_key]"
	setcycle 148 Procedure "ISPC"
	setcycle 148 ISPC "MC"
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	setcycle 152 Text "CAT"
	setcycle 152 Image "fish"
	setcycle 152 Trial "Incongruent"
	setcycle 152 Rep "1"
	setcycle 152 Correct "[incongruent_key]"
	setcycle 152 Procedure "ISPC"
	setcycle 152 ISPC "MC"
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	setcycle 156 Text "FISH"
	setcycle 156 Image "fish"
	setcycle 156 Trial "Congruent"
	setcycle 156 Rep "1"
	setcycle 156 Correct "[congruent_key]"
	setcycle 156 Procedure "ISPC"
	setcycle 156 ISPC "MC"
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	run IS_even

define sequence IS_odd
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run fixation_dot always
	run Stim always
	run counter always
	run Break always
	run log always

define loop IS_odd_bc_loop
	set source_file ""
	set source "table"
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "IS_odd"
	set description "Repeatedly runs another item"
	set cycles 192
	set continuous "no"
	set break_if_on_first "yes"
	set break_if "never"
	setcycle 0 Text "DOG"
	setcycle 0 Image "dog"
	setcycle 0 Trial "Congruent"
	setcycle 0 Rep "1"
	setcycle 0 Correct "[congruent_key]"
	setcycle 0 Procedure "ISPC"
	setcycle 0 ISPC "MI"
	setcycle 1 Text "DOG"
	setcycle 1 Image "dog"
	setcycle 1 Trial "Congruent"
	setcycle 1 Rep "2"
	setcycle 1 Correct "[congruent_key]"
	setcycle 1 Procedure "ISPC"
	setcycle 1 ISPC "MI"
	setcycle 2 Text "DOG"
	setcycle 2 Image "dog"
	setcycle 2 Trial "Congruent"
	setcycle 2 Rep "3"
	setcycle 2 Correct "[congruent_key]"
	setcycle 2 Procedure "ISPC"
	setcycle 2 ISPC "MI"
	setcycle 3 Text "DOG"
	setcycle 3 Image "dog"
	setcycle 3 Trial "Congruent"
	setcycle 3 Rep "4"
	setcycle 3 Correct "[congruent_key]"
	setcycle 3 Procedure "ISPC"
	setcycle 3 ISPC "MI"
	setcycle 4 Text "DOG"
	setcycle 4 Image "dog"
	setcycle 4 Trial "Congruent"
	setcycle 4 Rep "5"
	setcycle 4 Correct "[congruent_key]"
	setcycle 4 Procedure "ISPC"
	setcycle 4 ISPC "MI"
	setcycle 5 Text "DOG"
	setcycle 5 Image "dog"
	setcycle 5 Trial "Congruent"
	setcycle 5 Rep "6"
	setcycle 5 Correct "[congruent_key]"
	setcycle 5 Procedure "ISPC"
	setcycle 5 ISPC "MI"
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	setcycle 12 Text "FISH"
	setcycle 12 Image "fish"
	setcycle 12 Trial "Congruent"
	setcycle 12 Rep "1"
	setcycle 12 Correct "[congruent_key]"
	setcycle 12 Procedure "ISPC"
	setcycle 12 ISPC "MI"
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	setcycle 24 Text "BIRD"
	setcycle 24 Image "bird"
	setcycle 24 Trial "Congruent"
	setcycle 24 Rep "1"
	setcycle 24 Correct "[congruent_key]"
	setcycle 24 Procedure "ISPC"
	setcycle 24 ISPC "MC"
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	setcycle 60 Text "CAT"
	setcycle 60 Image "dog"
	setcycle 60 Trial "Incongruent"
	setcycle 60 Rep "1"
	setcycle 60 Correct "[incongruent_key]"
	setcycle 60 Procedure "ISPC"
	setcycle 60 ISPC "MI"
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	setcycle 72 Text "FISH"
	setcycle 72 Image "dog"
	setcycle 72 Trial "Incongruent"
	setcycle 72 Rep "1"
	setcycle 72 Correct "[incongruent_key]"
	setcycle 72 Procedure "ISPC"
	setcycle 72 ISPC "MI"
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	setcycle 84 Text "BIRD"
	setcycle 84 Image "dog"
	setcycle 84 Trial "Incongruent"
	setcycle 84 Rep "1"
	setcycle 84 Correct "[incongruent_key]"
	setcycle 84 Procedure "ISPC"
	setcycle 84 ISPC "MI"
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	setcycle 96 Text "CAT"
	setcycle 96 Image "fish"
	setcycle 96 Trial "Incongruent"
	setcycle 96 Rep "1"
	setcycle 96 Correct "[incongruent_key]"
	setcycle 96 Procedure "ISPC"
	setcycle 96 ISPC "MI"
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	setcycle 108 Text "DOG"
	setcycle 108 Image "fish"
	setcycle 108 Trial "Incongruent"
	setcycle 108 Rep "1"
	setcycle 108 Correct "[incongruent_key]"
	setcycle 108 Procedure "ISPC"
	setcycle 108 ISPC "MI"
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	setcycle 120 Text "BIRD"
	setcycle 120 Image "fish"
	setcycle 120 Trial "Incongruent"
	setcycle 120 Rep "1"
	setcycle 120 Correct "[incongruent_key]"
	setcycle 120 Procedure "ISPC"
	setcycle 120 ISPC "MI"
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	setcycle 131 Text "BIRD"
	setcycle 131 Image "fish"
	setcycle 131 Trial "Incongruent"
	setcycle 131 Rep "12"
	setcycle 131 Correct "[incongruent_key]"
	setcycle 131 Procedure "ISPC"
	setcycle 131 ISPC "MC"
	setcycle 132 Text "CAT"
	setcycle 132 Image "bird"
	setcycle 132 Trial "Incongruent"
	setcycle 132 Rep "1"
	setcycle 132 Correct "[incongruent_key]"
	setcycle 132 Procedure "ISPC"
	setcycle 132 ISPC "MC"
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	setcycle 136 Text "DOG"
	setcycle 136 Image "bird"
	setcycle 136 Trial "Incongruent"
	setcycle 136 Rep "1"
	setcycle 136 Correct "[incongruent_key]"
	setcycle 136 Procedure "ISPC"
	setcycle 136 ISPC "MC"
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	setcycle 140 Text "FISH"
	setcycle 140 Image "bird"
	setcycle 140 Trial "Incongruent"
	setcycle 140 Rep "1"
	setcycle 140 Correct "[incongruent_key]"
	setcycle 140 Procedure "ISPC"
	setcycle 140 ISPC "MC"
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	setcycle 144 Text "BIRD"
	setcycle 144 Image "cat"
	setcycle 144 Trial "Incongruent"
	setcycle 144 Rep "1"
	setcycle 144 Correct "[incongruent_key]"
	setcycle 144 Procedure "ISPC"
	setcycle 144 ISPC "MC"
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	setcycle 148 Text "DOG"
	setcycle 148 Image "cat"
	setcycle 148 Trial "Incongruent"
	setcycle 148 Rep "1"
	setcycle 148 Correct "[incongruent_key]"
	setcycle 148 Procedure "ISPC"
	setcycle 148 ISPC "MC"
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	setcycle 152 Text "FISH"
	setcycle 152 Image "cat"
	setcycle 152 Trial "Incongruent"
	setcycle 152 Rep "1"
	setcycle 152 Correct "[incongruent_key]"
	setcycle 152 Procedure "ISPC"
	setcycle 152 ISPC "MC"
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	setcycle 156 Text "CAT"
	setcycle 156 Image "cat"
	setcycle 156 Trial "Congruent"
	setcycle 156 Rep "1"
	setcycle 156 Correct "[congruent_key]"
	setcycle 156 Procedure "ISPC"
	setcycle 156 ISPC "MC"
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	run IS_odd

define sketchpad IS_start
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You've completed Block 1 of 3.<br />Take a short break, and press the space bar to continue." x=0 y=0 z_index=0

define sequence LWMC
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run fixation_dot always
	run Stim always
	run Record always
	run counter always
	run Break "[count_counter]%96 = 95"
	run log always

define loop LWMC_loop
	set source_file ""
	set source "table"
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "LWMC"
	set description "Repeatedly runs another item"
	set cycles 192
	set continuous "no"
	set break_if_on_first "yes"
	set break_if "never"
	setcycle 0 Text "BIRD"
	setcycle 0 Image "bird"
	setcycle 0 Trial "Congruent"
	setcycle 0 Rep "1"
	setcycle 0 Correct "[congruent_key]"
	setcycle 0 Procedure "LWMC"
	setcycle 0 ISPC "MC"
	setcycle 1 Text "BIRD"
	setcycle 1 Image "bird"
	setcycle 1 Trial "Congruent"
	setcycle 1 Rep "2"
	setcycle 1 Correct "[congruent_key]"
	setcycle 1 Procedure "LWMC"
	setcycle 1 ISPC "MC"
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	setcycle 27 Text "CAT"
	setcycle 27 Image "bird"
	setcycle 27 Trial "Incongruent"
	setcycle 27 Rep "1"
	setcycle 27 Correct "[incongruent_key]"
	setcycle 27 Procedure "LWMC"
	setcycle 27 ISPC "MC"
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	setcycle 30 Text "DOG"
	setcycle 30 Image "bird"
	setcycle 30 Trial "Incongruent"
	setcycle 30 Rep "1"
	setcycle 30 Correct "[incongruent_key]"
	setcycle 30 Procedure "LWMC"
	setcycle 30 ISPC "MC"
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	setcycle 33 Text "FISH"
	setcycle 33 Image "bird"
	setcycle 33 Trial "Incongruent"
	setcycle 33 Rep "1"
	setcycle 33 Correct "[incongruent_key]"
	setcycle 33 Procedure "LWMC"
	setcycle 33 ISPC "MC"
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	setcycle 36 Text "CAT"
	setcycle 36 Image "cat"
	setcycle 36 Trial "Congruent"
	setcycle 36 Rep "1"
	setcycle 36 Correct "[congruent_key]"
	setcycle 36 Procedure "LWMC"
	setcycle 36 ISPC "MC"
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	setcycle 63 Text "DOG"
	setcycle 63 Image "dog"
	setcycle 63 Trial "Congruent"
	setcycle 63 Rep "1"
	setcycle 63 Correct "[congruent_key]"
	setcycle 63 Procedure "LWMC"
	setcycle 63 ISPC "MC"
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	setcycle 90 Text "FISH"
	setcycle 90 Image "fish"
	setcycle 90 Trial "Congruent"
	setcycle 90 Rep "1"
	setcycle 90 Correct "[congruent_key]"
	setcycle 90 Procedure "LWMC"
	setcycle 90 ISPC "MC"
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	setcycle 117 Text "BIRD"
	setcycle 117 Image "cat"
	setcycle 117 Trial "Incongruent"
	setcycle 117 Rep "1"
	setcycle 117 Correct "[incongruent_key]"
	setcycle 117 Procedure "LWMC"
	setcycle 117 ISPC "MC"
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	setcycle 120 Text "DOG"
	setcycle 120 Image "cat"
	setcycle 120 Trial "Incongruent"
	setcycle 120 Rep "1"
	setcycle 120 Correct "[incongruent_key]"
	setcycle 120 Procedure "LWMC"
	setcycle 120 ISPC "MC"
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	setcycle 123 Text "FISH"
	setcycle 123 Image "cat"
	setcycle 123 Trial "Incongruent"
	setcycle 123 Rep "1"
	setcycle 123 Correct "[incongruent_key]"
	setcycle 123 Procedure "LWMC"
	setcycle 123 ISPC "MC"
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	setcycle 126 Text "BIRD"
	setcycle 126 Image "dog"
	setcycle 126 Trial "Incongruent"
	setcycle 126 Rep "1"
	setcycle 126 Correct "[incongruent_key]"
	setcycle 126 Procedure "LWMC"
	setcycle 126 ISPC "MC"
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	setcycle 129 Text "CAT"
	setcycle 129 Image "dog"
	setcycle 129 Trial "Incongruent"
	setcycle 129 Rep "1"
	setcycle 129 Correct "[incongruent_key]"
	setcycle 129 Procedure "LWMC"
	setcycle 129 ISPC "MC"
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	setcycle 132 Text "FISH"
	setcycle 132 Image "dog"
	setcycle 132 Trial "Incongruent"
	setcycle 132 Rep "1"
	setcycle 132 Correct "[incongruent_key]"
	setcycle 132 Procedure "LWMC"
	setcycle 132 ISPC "MC"
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	setcycle 135 Text "BIRD"
	setcycle 135 Image "fish"
	setcycle 135 Trial "Incongruent"
	setcycle 135 Rep "1"
	setcycle 135 Correct "[incongruent_key]"
	setcycle 135 Procedure "LWMC"
	setcycle 135 ISPC "MC"
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	setcycle 138 Text "CAT"
	setcycle 138 Image "fish"
	setcycle 138 Trial "Incongruent"
	setcycle 138 Rep "1"
	setcycle 138 Correct "[incongruent_key]"
	setcycle 138 Procedure "LWMC"
	setcycle 138 ISPC "MC"
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	setcycle 141 Text "DOG"
	setcycle 141 Image "fish"
	setcycle 141 Trial "Incongruent"
	setcycle 141 Rep "1"
	setcycle 141 Correct "[incongruent_key]"
	setcycle 141 Procedure "LWMC"
	setcycle 141 ISPC "MC"
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	setcycle 144 Text "PIG"
	setcycle 144 Image "pig"
	setcycle 144 Trial "Congruent"
	setcycle 144 Rep "1"
	setcycle 144 Correct "[congruent_key]"
	setcycle 144 Procedure "LWMC"
	setcycle 144 ISPC "PC50"
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	setcycle 150 Text "FROG"
	setcycle 150 Image "frog"
	setcycle 150 Trial "Congruent"
	setcycle 150 Rep "1"
	setcycle 150 Correct "[congruent_key]"
	setcycle 150 Procedure "LWMC"
	setcycle 150 ISPC "PC50"
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	setcycle 156 Text "SEAL"
	setcycle 156 Image "seal"
	setcycle 156 Trial "Congruent"
	setcycle 156 Rep "1"
	setcycle 156 Correct "[congruent_key]"
	setcycle 156 Procedure "LWMC"
	setcycle 156 ISPC "PC50"
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	setcycle 162 Text "COW"
	setcycle 162 Image "cow"
	setcycle 162 Trial "Congruent"
	setcycle 162 Rep "1"
	setcycle 162 Correct "[congruent_key]"
	setcycle 162 Procedure "LWMC"
	setcycle 162 ISPC "PC50"
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	setcycle 168 Text "FROG"
	setcycle 168 Image "pig"
	setcycle 168 Trial "Incongruent"
	setcycle 168 Rep "1"
	setcycle 168 Correct "[incongruent_key]"
	setcycle 168 Procedure "LWMC"
	setcycle 168 ISPC "PC50"
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	run LWMC

define sketchpad LWMC_start
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="This concludes the practice trails. <br /><br />Remember, press <b>[congruent_key]</b> if the picture matches the text.<br /><br />If the animal does not match the text, press <b>[incongruent_key]</b><br /><br />Press the space bar to begin the experiment." x=0 y=0 z_index=0

define sketchpad LWMC_stim
	set duration "keypress"
	set description "Displays stimuli"

define sequence LWMI
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run fixation_dot always
	run Stim always
	run counter always
	run Break always
	run log always

define sketchpad LWMI_Start
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You've completed block 2 of 3.<br />Take a short break and press the space bar to continue." x=0 y=0 z_index=0

define loop LWMI_loop
	set source_file ""
	set source "table"
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "LWMI"
	set description "Repeatedly runs another item"
	set cycles 192
	set continuous "no"
	set break_if_on_first "yes"
	set break_if "never"
	setcycle 0 Text "BIRD"
	setcycle 0 Image "bird"
	setcycle 0 Trial "Congruent"
	setcycle 0 Rep "1"
	setcycle 0 Correct "[congruent_key]"
	setcycle 0 Procedure "LWMI"
	setcycle 0 ISPC "MI"
	setcycle 1 Text "BIRD"
	setcycle 1 Image "bird"
	setcycle 1 Trial "Congruent"
	setcycle 1 Rep "2"
	setcycle 1 Correct "[congruent_key]"
	setcycle 1 Procedure "LWMI"
	setcycle 1 ISPC "MI"
	setcycle 2 Text "BIRD"
	setcycle 2 Image "bird"
	setcycle 2 Trial "Congruent"
	setcycle 2 Rep "3"
	setcycle 2 Correct "[congruent_key]"
	setcycle 2 Procedure "LWMI"
	setcycle 2 ISPC "MI"
	setcycle 3 Text "BIRD"
	setcycle 3 Image "bird"
	setcycle 3 Trial "Congruent"
	setcycle 3 Rep "4"
	setcycle 3 Correct "[congruent_key]"
	setcycle 3 Procedure "LWMI"
	setcycle 3 ISPC "MI"
	setcycle 4 Text "BIRD"
	setcycle 4 Image "bird"
	setcycle 4 Trial "Congruent"
	setcycle 4 Rep "5"
	setcycle 4 Correct "[congruent_key]"
	setcycle 4 Procedure "LWMI"
	setcycle 4 ISPC "MI"
	setcycle 5 Text "BIRD"
	setcycle 5 Image "bird"
	setcycle 5 Trial "Congruent"
	setcycle 5 Rep "6"
	setcycle 5 Correct "[congruent_key]"
	setcycle 5 Procedure "LWMI"
	setcycle 5 ISPC "MI"
	setcycle 6 Text "BIRD"
	setcycle 6 Image "bird"
	setcycle 6 Trial "Congruent"
	setcycle 6 Rep "7"
	setcycle 6 Correct "[congruent_key]"
	setcycle 6 Procedure "LWMI"
	setcycle 6 ISPC "MI"
	setcycle 7 Text "BIRD"
	setcycle 7 Image "bird"
	setcycle 7 Trial "Congruent"
	setcycle 7 Rep "8"
	setcycle 7 Correct "[congruent_key]"
	setcycle 7 Procedure "LWMI"
	setcycle 7 ISPC "MI"
	setcycle 8 Text "BIRD"
	setcycle 8 Image "bird"
	setcycle 8 Trial "Congruent"
	setcycle 8 Rep "9"
	setcycle 8 Correct "[congruent_key]"
	setcycle 8 Procedure "LWMI"
	setcycle 8 ISPC "MI"
	setcycle 9 Text "CAT"
	setcycle 9 Image "cat"
	setcycle 9 Trial "Congruent"
	setcycle 9 Rep "1"
	setcycle 9 Correct "[congruent_key]"
	setcycle 9 Procedure "LWMI"
	setcycle 9 ISPC "MI"
	setcycle 10 Text "CAT"
	setcycle 10 Image "cat"
	setcycle 10 Trial "Congruent"
	setcycle 10 Rep "2"
	setcycle 10 Correct "[congruent_key]"
	setcycle 10 Procedure "LWMI"
	setcycle 10 ISPC "MI"
	setcycle 11 Text "CAT"
	setcycle 11 Image "cat"
	setcycle 11 Trial "Congruent"
	setcycle 11 Rep "3"
	setcycle 11 Correct "[congruent_key]"
	setcycle 11 Procedure "LWMI"
	setcycle 11 ISPC "MI"
	setcycle 12 Text "CAT"
	setcycle 12 Image "cat"
	setcycle 12 Trial "Congruent"
	setcycle 12 Rep "4"
	setcycle 12 Correct "[congruent_key]"
	setcycle 12 Procedure "LWMI"
	setcycle 12 ISPC "MI"
	setcycle 13 Text "CAT"
	setcycle 13 Image "cat"
	setcycle 13 Trial "Congruent"
	setcycle 13 Rep "5"
	setcycle 13 Correct "[congruent_key]"
	setcycle 13 Procedure "LWMI"
	setcycle 13 ISPC "MI"
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	setcycle 18 Text "DOG"
	setcycle 18 Image "dog"
	setcycle 18 Trial "Congruent"
	setcycle 18 Rep "1"
	setcycle 18 Correct "[congruent_key]"
	setcycle 18 Procedure "LWMI"
	setcycle 18 ISPC "MI"
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	setcycle 27 Text "FISH"
	setcycle 27 Image "fish"
	setcycle 27 Trial "Congruent"
	setcycle 27 Rep "1"
	setcycle 27 Correct "[congruent_key]"
	setcycle 27 Procedure "LWMI"
	setcycle 27 ISPC "MI"
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	setcycle 36 Text "CAT"
	setcycle 36 Image "bird"
	setcycle 36 Trial "Incongruent"
	setcycle 36 Rep "1"
	setcycle 36 Correct "[incongruent_key]"
	setcycle 36 Procedure "LWMI"
	setcycle 36 ISPC "MI"
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	setcycle 144 Text "PIG"
	setcycle 144 Image "pig"
	setcycle 144 Trial "Congruent"
	setcycle 144 Rep "1"
	setcycle 144 Correct "[congruent_key]"
	setcycle 144 Procedure "LWMI"
	setcycle 144 ISPC "PC50"
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	setcycle 150 Text "COW"
	setcycle 150 Image "cow"
	setcycle 150 Trial "Congruent"
	setcycle 150 Rep "1"
	setcycle 150 Correct "[congruent_key]"
	setcycle 150 Procedure "LWMI"
	setcycle 150 ISPC "PC50"
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	setcycle 156 Text "SEAL"
	setcycle 156 Image "seal"
	setcycle 156 Trial "Congruent"
	setcycle 156 Rep "1"
	setcycle 156 Correct "[congruent_key]"
	setcycle 156 Procedure "LWMI"
	setcycle 156 ISPC "PC50"
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	setcycle 162 Text "FROG"
	setcycle 162 Image "frog"
	setcycle 162 Trial "Congruent"
	setcycle 162 Rep "1"
	setcycle 162 Correct "[congruent_key]"
	setcycle 162 Procedure "LWMI"
	setcycle 162 ISPC "PC50"
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	setcycle 168 Text "COW"
	setcycle 168 Image "pig"
	setcycle 168 Trial "Incongruent"
	setcycle 168 Rep "1"
	setcycle 168 Correct "[incongruent_key]"
	setcycle 168 Procedure "LWMI"
	setcycle 168 ISPC "PC50"
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	run LWMI

define inline_script Record
	set description "Executes Python code"
	___run__
	
	import pyaudio
	import wave
	import sys
	import os
	from openexp.keyboard import keyboard
	
	# Name of sub-directory where WAVE files are placed
	current_experiment_path = self.get('experiment_path')
	subdir_recording = "/S%d/%s/" % (self.get('subject_nr'),self.get('Procedure'))
	newdir=current_experiment_path + subdir_recording
	print('The directory Im having trouble with is...')
	print(newdir)
	if not os.path.isdir(newdir):
		os.makedirs(newdir)
	
	# Variables for Pyaudio
	chunk = 1024
	format = pyaudio.paInt16
	channels = 1
	rate = 44100
	
	# Set variable for the labelling of the recorded WAVE file.
	wave_output_filename = "P-%s_T-%s_%s_%s_Num%d.wav" % (self.get('Image'),self.get('Text'),self.get('Trial'),self.get('ISPC'),self.get('count_Stim'))
	
	#Audio recording stuff
	p = pyaudio.PyAudio()
	
	stream = p.open(format = format,
					channels = channels,
					rate = rate,
					input = True,
					frames_per_buffer = chunk)
	
	# Import keyboard and set accepted key
	recorder_keyboard = keyboard(exp, keylist=['space'])
	
	# Determine the timeout in ms
	timeout = 5000
	
	# Create an empty list for audio recording
	frames = []
	
	# Determine the timestamp of the start of the response interval
	start_time = self.time()
	current_time = self.time()
	
	# Record audio until space is pressed
	while (current_time - start_time) < timeout:
	
		# Record data audio data
		data = stream.read(chunk)
		# Add the data to a buffer (a list of chunks)
		frames.append(data)
	
		# Get new timestamp
		current_time = self.time()
	
		# Check if space key has been pressed
		key = recorder_keyboard.get_key(timeout=0)[0]
	
		# If space is pressed, advance to next part of the experiment
		if key == 'space':
			# Record data audio data
			data = stream.read(chunk)
			# Add the data to a buffer (a list of chunks)
			frames.append(data)
			break
	
	else:
		# Record data audio data
		data = stream.read(chunk)
		# Add the data to a buffer (a list of chunks)
		frames.append(data)
	
	# Close the audio recording stream
	stream.close()
	p.terminate()
	
	# write data to WAVE file
	wf = wave.open(current_experiment_path + subdir_recording + wave_output_filename, 'wb')
	wf.setnchannels(channels)
	wf.setsampwidth(p.get_sample_size(format))
	wf.setframerate(rate)
	wf.writeframes(''.join(frames))
	wf.close()
	__end__
	set _prepare ""

define sketchpad Stim
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[Image].png" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=75 html=yes show_if=always text="[Text]" x=0 y=0 z_index=0

define sequence Training
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run fixation_dot always
	run Stim always
	run Record always
	run log always

define sketchpad Training_intro
	set duration "keypress"
	set description "Displays stimuli"

define loop Training_loop
	set source_file ""
	set source "table"
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Training"
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous "no"
	set break_if_on_first "yes"
	set break_if "never"
	setcycle 0 Text "BIRD"
	setcycle 0 Image "bird"
	setcycle 0 Trial "Congruent"
	setcycle 0 Rep "1"
	setcycle 0 Correct "[congruent_key]"
	setcycle 0 Procedure "Training"
	setcycle 0 ISPC "TRAINING"
	setcycle 1 Text "FISH"
	setcycle 1 Image "bird"
	setcycle 1 Trial "Incongruent"
	setcycle 1 Rep "2"
	setcycle 1 Correct "[incongruent_key]"
	setcycle 1 Procedure "Training"
	setcycle 1 ISPC "TRAINING"
	setcycle 2 Text "FISH"
	setcycle 2 Image "fish"
	setcycle 2 Trial "Congruent"
	setcycle 2 Rep "1"
	setcycle 2 Correct "[congruent_key]"
	setcycle 2 Procedure "Training"
	setcycle 2 ISPC "TRAINING"
	setcycle 3 Text "BIRD"
	setcycle 3 Image "fish"
	setcycle 3 Trial "Incongruent"
	setcycle 3 Rep "2"
	setcycle 3 Correct "[incongruent_key]"
	setcycle 3 Procedure "Training"
	setcycle 3 ISPC "TRAINING"
	setcycle 4 Text "DOG"
	setcycle 4 Image "dog"
	setcycle 4 Trial "Congruent"
	setcycle 4 Rep "1"
	setcycle 4 Correct "[congruent_key]"
	setcycle 4 Procedure "Training"
	setcycle 4 ISPC "TRAINING"
	setcycle 5 Text "CAT"
	setcycle 5 Image "dog"
	setcycle 5 Trial "Incongruent"
	setcycle 5 Rep "2"
	setcycle 5 Correct "[incongruent_key]"
	setcycle 5 Procedure "Training"
	setcycle 5 ISPC "TRAINING"
	setcycle 6 Text "CAT"
	setcycle 6 Image "cat"
	setcycle 6 Trial "Congruent"
	setcycle 6 Rep "1"
	setcycle 6 Correct "[congruent_key]"
	setcycle 6 Procedure "Training"
	setcycle 6 ISPC "TRAINING"
	setcycle 7 Text "DOG"
	setcycle 7 Image "cat"
	setcycle 7 Trial "Incongruent"
	setcycle 7 Rep "2"
	setcycle 7 Correct "[incongruent_key]"
	setcycle 7 Procedure "Training"
	setcycle 7 ISPC "TRAINING"
	setcycle 8 Text "SEAL"
	setcycle 8 Image "seal"
	setcycle 8 Trial "Congruent"
	setcycle 8 Rep "1"
	setcycle 8 Correct "[congruent_key]"
	setcycle 8 Procedure "Training"
	setcycle 8 ISPC "TRAINING"
	setcycle 9 Text "FROG"
	setcycle 9 Image "seal"
	setcycle 9 Trial "Incongruent"
	setcycle 9 Rep "2"
	setcycle 9 Correct "[incongruent_key]"
	setcycle 9 Procedure "Training"
	setcycle 9 ISPC "TRAINING"
	setcycle 10 Text "FROG"
	setcycle 10 Image "frog"
	setcycle 10 Trial "Congruent"
	setcycle 10 Rep "1"
	setcycle 10 Correct "[congruent_key]"
	setcycle 10 Procedure "Training"
	setcycle 10 ISPC "TRAINING"
	setcycle 11 Text "SEAL"
	setcycle 11 Image "frog"
	setcycle 11 Trial "Incongruent"
	setcycle 11 Rep "2"
	setcycle 11 Correct "[incongruent_key]"
	setcycle 11 Procedure "Training"
	setcycle 11 ISPC "TRAINING"
	setcycle 12 Text "COW"
	setcycle 12 Image "cow"
	setcycle 12 Trial "Congruent"
	setcycle 12 Rep "1"
	setcycle 12 Correct "[congruent_key]"
	setcycle 12 Procedure "Training"
	setcycle 12 ISPC "TRAINING"
	setcycle 13 Text "PIG"
	setcycle 13 Image "cow"
	setcycle 13 Trial "Incongruent"
	setcycle 13 Rep "2"
	setcycle 13 Correct "[incongruent_key]"
	setcycle 13 Procedure "Training"
	setcycle 13 ISPC "TRAINING"
	setcycle 14 Text "PIG"
	setcycle 14 Image "pig"
	setcycle 14 Trial "Congruent"
	setcycle 14 Rep "1"
	setcycle 14 Correct "[congruent_key]"
	setcycle 14 Procedure "Training"
	setcycle 14 ISPC "TRAINING"
	setcycle 15 Text "COW"
	setcycle 15 Image "pig"
	setcycle 15 Trial "Incongruent"
	setcycle 15 Rep "2"
	setcycle 15 Correct "[incongruent_key]"
	setcycle 15 Procedure "Training"
	setcycle 15 ISPC "TRAINING"
	run Training

define sketchpad Welcome_1
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Welcome to the experiment!<br /><br />Thank you for your time. This will take approximately 30 minutes.<br /><br /><br />Press any key to get started." x=0 y=0 z_index=0

define sketchpad Welcome_2
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You will be viewing pictures of animals on screen one at a time. <br />An animal name will be embedded in the picture. <br />The animal will be one of the following:<br />" x=0 y=-224 z_index=0
	draw image center=1 file="bird.png" scale=0.25 show_if=always x=-352 y=-64 z_index=0
	draw image center=1 file="cat.png" scale=0.25 show_if=always x=-128 y=-64 z_index=0
	draw image center=1 file="cow.png" scale=0.25 show_if=always x=-352 y=128 z_index=0
	draw image center=1 file="dog.png" scale=0.25 show_if=always x=352 y=-64 z_index=0
	draw image center=1 file="fish.png" scale=0.25 show_if=always x=128 y=-64 z_index=0
	draw image center=1 file="frog.png" scale=0.25 show_if=always x=-128 y=128 z_index=0
	draw image center=1 file="seal.png" scale=0.25 show_if=always x=352 y=128 z_index=0
	draw image center=1 file="pig.png" scale=0.25 show_if=always x=128 y=128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=BIRD x=-352 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=CAT x=-128 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=FISH x=128 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=DOG x=352 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=COW x=-352 y=224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=FROG x=-128 y=224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=PIG x=128 y=224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=SEAL x=352 y=224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue..." x=0 y=352 z_index=0

define sketchpad Welcome_3
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your task is to name the animal silhouette, not the animal name indicated in the text.<br /><br />Throughout the experiment, <br />you should make your responses as quickly as possible <br />while maintaining a high level of accuracy.<br /><br />Once you name the animal, press the space bar to see the next one.<br /><br />Press any key to continue... " x=0 y=0 z_index=0

define sketchpad Welcome_4
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Remember, name the animal silhouette. <br /><br />In the examples below, the correct response is BIRD.<br /><br />Press any key to start some practice trials." x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="BIRD<br />(Text matches silhouette)" x=-288 y=320 z_index=0
	draw image center=1 file="bird.png" scale=0.5 show_if=always x=-288 y=160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text=BIRD x=-320 y=224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=-640 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text=BIRD x=-288 y=160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text="" x=-672 y=32 z_index=0
	draw image center=1 file="bird.png" scale=0.5 show_if=always x=288 y=160 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="BIRD<br />(Text doesn't match silhouette)" x=288 y=320 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=25 html=yes show_if=always text=CAT x=288 y=160 z_index=0

define sketchpad counter
	set duration 0
	set description "Displays stimuli"

define sequence experiment
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run s_l "[subject_nr] % 4 = 0 or [subject_nr] %4 = 1"
	run l_s "[subject_nr] % 4 = 2 or [subject_nr] %4 = 3"

define sketchpad fixation_dot
	set duration 1000
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sequence key_set
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run l_s always
	run s_l "=[subject_nr] % 4 == 2 or =[subject_nr] % 4 == 3"

define loop l_s
	set source_file ""
	set source "table"
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Exp_Loop"
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous "no"
	set break_if_on_first "yes"
	set break_if "never"
	setcycle 0 incongruent_key "s"
	setcycle 0 congruent_key "l"
	run Exp_Loop

define logger log
	set description "Logs experimental data"
	set auto_log "yes"

define inline_script new_inline_script
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define inline_script new_inline_script_1
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define inline_script new_inline_script_2
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define loop new_loop
	set source_file ""
	set source "table"
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous "no"
	set break_if_on_first "yes"
	set break_if "never"
	setcycle 0 empty_column ""
	run 

define loop s_l
	set source_file ""
	set source "table"
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Exp_Loop"
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous "no"
	set column_order "incongruent_key;congruent_key"
	set break_if_on_first "yes"
	set break_if "never"
	setcycle 0 incongruent_key "l"
	setcycle 0 congruent_key "s"
	run Exp_Loop

define keyboard_response space_bar
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "SPACE"
	set allowed_responses "SPACE"

